
run("Gaussian Blur...", "sigma=2");
run("Auto Threshold", "method=Huang white");
run("Analyze Particles...", "size=20.00-Infinity show=Nothing clear add");
run("Set Measurements...", "area mean integrated display redirect=None decimal=3");
run("Analyze Particles...", "size=20-Infinity clear add");
roiManager("Deselect");

roiManager("Select", 12);
roiManager("Show None");
roiManager("Select", 0);
=
selectImage("C1-BBB_PFC_2J_slice1_001-MaxIP.nd2");

roiManager("Deselect");
roiManager("Select", 0);
roiManager("Select", newArray(0,1,2,3,4,5,6,7,8,9,10,11,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264));
roiManager("Combine");
roiManager("Add");

makeRectangle(1564, 797, 55, 41);
roiManager("Add");
run("Measure");
makeRectangle(1768, 673, 3, 1);

run("Select None");
roiManager("Show None");
run("Histogram");
Table.showHistogramTable;
makeRectangle(34, 37, 4, 3);
run("Select path");
open("F:/Lilian/Post-doc Columbia/Imaging/Confocal/BBB_PFC_M/05102026/2J/BBB_PFC_2J_slice1_002-MaxIP.nd2");
selectImage("BBB_PFC_2J_slice1_002-MaxIP.nd2 - C=0");
selectImage("BBB_PFC_2J_slice1_002-MaxIP.nd2 - C=1");
selectImage("BBB_PFC_2J_slice1_002-MaxIP.nd2 - C=0");
makeRectangle(1096, 1228, 28, 58);
run("Measure");
run("Histogram");
selectWindow("Recorder");
